CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:\'Unknown\'|variable_revision_number:2|show_window:False|notes:\x5B\'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot startwith ".")

Metadata:[module_num:2|svn_version:\'Unknown\'|variable_revision_number:4|show_window:False|notes:\x5B\'The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:Yes
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:2
    Metadata extraction method:Extract from image file headers
    Metadata source:File name
    Regular expression:^(?P<FileID>.*_.*)_(?P<Channel>.*).tif$
    Regular expression:(?P<Date>\x5B0-9\x5D{4}_\x5B0-9\x5D{2}_\x5B0-9\x5D{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:
    Match file and image metadata:\x5B\x5D
    Use case insensitive matching?:No
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<FileID>.*_.*)_(?P<Channel>.*).tif$
    Regular expression:(?P<Date>\x5B0-9\x5D{4}_\x5B0-9\x5D{2}_\x5B0-9\x5D{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:
    Match file and image metadata:\x5B\x5D
    Use case insensitive matching?:No

NamesAndTypes:[module_num:3|svn_version:\'Unknown\'|variable_revision_number:5|show_window:False|notes:\x5B\'The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.\', \'---\', \'Load the images by matching files in the folder against the unique text pattern for each stain\x3A d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:\x5B{u\'DAPI\'\x3A u\'FileID\', u\'CY3\'\x3A u\'FileID\'}\x5D
    Image set matching method:Metadata
    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "_w1Hoechst")
    Name to assign these images:DAPI
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Retain outlines of loaded objects?:No
    Name the outline image:LoadedObjects
    Select the rule criteria:and (file does contain "_w2Cy3")
    Name to assign these images:CY3
    Name to assign these objects:Nucleus
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Retain outlines of loaded objects?:No
    Name the outline image:LoadedObjects

Groups:[module_num:4|svn_version:\'Unknown\'|variable_revision_number:2|show_window:False|notes:\x5B\'The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:FileID

IdentifyPrimaryObjects:[module_num:5|svn_version:\'Unknown\'|variable_revision_number:10|show_window:True|notes:\x5B\'Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
    Enter Laplacian of Gaussian threshold:.5
    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
    Enter LoG filter diameter:5
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:0.2
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Select binary image:MoG Global
    Masking objects:From image
    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
    Size of adaptive window:10

IdentifySecondaryObjects:[module_num:6|svn_version:\'Unknown\'|variable_revision_number:9|show_window:True|notes:\x5B\'Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:CY3
    Number of pixels by which to expand the primary objects:10
    Regularization factor:0.01
    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
    Discard the associated primary objects?:No
    Name the new primary objects:FilteredNuclei
    Retain outlines of the new primary objects?:No
    Name the new primary object outlines:FilteredNucleiOutlines
    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:5
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:10%
    Manual threshold:0
    Select the measurement to threshold with:None
    Select binary image:Do not use
    Masking objects:Nuclei
    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Method to calculate adaptive window size:Image size
    Size of adaptive window:10

MeasureObjectSizeShape:[module_num:7|svn_version:\'Unknown\'|variable_revision_number:1|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|svn_version:\'Unknown\'|variable_revision_number:7|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Name the output objects:Cells_filt
    Select the object to filter:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
    Select the objects that contain the filtered objects:None
    Retain outlines of the identified objects?:Yes
    Name the outline image:CellOutlinesFilt
    Rules file location:Elsewhere...\x7C
    Rules file name:rules.txt
    Class number:1
    Measurement count:1
    Additional object count:1
    Assign overlapping child to:Both parents
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select additional object to relabel:Nuclei
    Name the relabeled objects:Nuclei_filt
    Retain outlines of relabeled objects?:Yes
    Name the outline image:NucOutlinesFilt

SaveImages:[module_num:9|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Objects
    Select the image to save:NucOutlines
    Select the objects to save:Nuclei_filt
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MASK_nuc
    Saved file format:tif
    Output file location:Same folder as image\x7CSegmentation
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7CCellProfiler
    Saved movie format:avi

SaveImages:[module_num:10|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Objects
    Select the image to save:NucOutlines
    Select the objects to save:Cells_filt
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:CY3
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MASK_cell
    Saved file format:tif
    Output file location:Same folder as image\x7CSegmentation
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
    Saved movie format:avi

OverlayOutlines:[module_num:11|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\'Overlay the nucleus outlines on the cropped nuclear image.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:OverlayNucOutlinesFilt
    Outline display mode:Color
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
    Select outlines to display:NucOutlinesFilt
    Select outline color:Red
    Load outlines from an image or objects?:Image
    Select objects to display:None

SaveImages:[module_num:12|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:OverlayNucOutlinesFilt
    Select the objects to save:Nuclei
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CONTOUR_nuc
    Saved file format:tif
    Output file location:Same folder as image\x7CSegmentation
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7CCellProfiler
    Saved movie format:avi

OverlayOutlines:[module_num:13|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Display outlines on a blank image?:No
    Select image on which to display outlines:CY3
    Name the output image:OverlayCellOutlinesFilt
    Outline display mode:Color
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
    Select outlines to display:CellOutlinesFilt
    Select outline color:Red
    Load outlines from an image or objects?:Image
    Select objects to display:None

SaveImages:[module_num:14|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:OverlayCellOutlinesFilt
    Select the objects to save:Nuclei
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:CY3
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CONTOUR_cell
    Saved file format:tif
    Output file location:Same folder as image\x7CSegmentation
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7CCellProfiler
    Saved movie format:avi
